PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'distractor_prevalence': '0.9', 'validity': '1.0'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = deg
  Window size (pixels) = [1728, 1117]
  color = -1.0000, -1.0000, -1.0000
  expName = stress
  keyboardBackend = PsychToolbox
  logging level = warning
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Routines
  Routine fixation
    PolygonComponent fixcross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
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  Routine cue
    CodeComponent cue_init
      Code Type = Py
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      Begin Experiment:
        # genearte trial sequences,
        # first 6 cols: item positions (Target, Distractor, otherDist1-4)
        # 6-11: shapes (3-6 polygon, 0 - circle)
        # 12: singleton or not
        # 13: target color
        # 14: target orientation
        # 15: cue validity
        import pandas as pd

        n_trials = 600
        block_trials=5
        num_block=n_trials//block_trials
        # Create item locations, each row contains random shuffled numbers from 0 to 5 (first Target, second distractor)
        itempos = np.array([randchoice(6, 6, replace=False) for i in range(n_trials)])
        # create distractor shapes with 5 columns, each row contains random samples from [3,5,6,0,3,5,6,0]
        # 3,5,6,0(triangle, pentagon, hexagon, circle)
        item_shapes = np.array([randchoice([3,5,6,0,3,5,6,0], 5, replace=False) for i in range(n_trials)])
        # add a column of 4s to the first of the matrix
        item_shapes = np.insert(item_shapes, 0, 4, axis=1)

        # create target color, and target orietnation [0,1]
        # initialize a matrix with half 0s and half 1s
        item_specs = np.zeros((n_trials, 2))
        # specify the second half of the matrix to be 1s
        item_specs[n_trials//2:, :] = 1
        # random shuffle rows, independent of each column
        for i in range(2):
            np.random.shuffle(item_specs[:, i])

        # singleton prevalence

        nsingleton = np.int32(float(expInfo['distractor_prevalence'])*n_trials)

        singleton_trials = np.concatenate((np.ones((nsingleton, 1)),
            np.zeros((n_trials-nsingleton, 1))), axis=0)
        np.random.shuffle(singleton_trials)
        # add cue validitt as one column
        cue_valid_trials = np.int16(float(expInfo['validity'])*n_trials)
        item_valid = np.concatenate((np.ones((cue_valid_trials, 1)), np.zeros((n_trials-cue_valid_trials, 1))), axis=0)
        # random shuffle rows
        np.random.shuffle(item_valid)

        # combine itempos, item_shapes, and item_specs into trials
        sequences = np.concatenate((itempos, item_shapes, singleton_trials, item_specs, item_valid), axis=1)
        # # convert trials to pandas dataframe
        sequences = pd.DataFrame(sequences, columns=['pos1', 'pos2', 'pos3', 'pos4', 'pos5', 'pos6',
                                               'shape1', 'shape2', 'shape3', 'shape4', 'shape5', 'shape6',
                                               'singleton', 'target_color', 'target_orientation', 'cue_validity'])
        # change all columns to int
        sequences = sequences.astype(int)
        #save trials to csv file in subfolder sequences
        seq_file = _thisDir + os.sep + u'data/seq_%s.csv' % (expInfo['participant'])
        sequences.to_csv(seq_file, index=False)

        circle_rad = 6 # radius of circle (degrees)  were centered from the fixation
        lw = 1 # item border line width (pixels)
        dw = 3 # diamond width (degrees)
        #ill = 1.5 # internal line length (degrees)     1.5°
        #ilw = 0.3 # internal line width  (degrees)     0.3°
        #ilcol = 'black'
        #color
        col_Teal = [-0.7255,0.8902,0.8353]
        col_orange = [1.000, 0.2491, -1.0000]
        col_black = [-1, -1, -1]

        # create a 6 circular coordinates from 0 to 300 degrees with radius of circle_rad
        CoordsX = [circle_rad*cos(t*pi/180) for t in range(0, 301, 60)]
        CoordsY = [circle_rad*sin(t*pi/180) for t in range(0, 301, 60)]
      Begin Routine:
        # construct pointer
        ip = randchoice([pos1, pos3, pos4, pos5, pos6]) # except salient distractor
        # change line start, end
        line.start = [0,0]
        line.end = [CoordsX[ip]/3.0, CoordsY[ip]/3.0]
        if cue_validity == 1:
            # point to distractor location
            line.end = [CoordsX[pos2]/3.0, CoordsY[pos2]/3.0]
    PolygonComponent fix_disk
      fillColor = 0.7000, 0.7000, 0.7000
      lineColor = -1,-1,-1
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent fixation_cross
      contrast [set every repeat] = 1
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    PolygonComponent fix_disk2
      fillColor = 0.7,0.7,0.7
      lineColor = 0.7,0.7,0.7
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent line
      fillColor = white
      lineWidth = 5
      saveStartStop = False
      shape = line
      size = (2, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine search
    CodeComponent search_code
      Code Type = Py
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      Begin Routine:
        # draw six shapes in the six circular coordinates
        if target_color == 0:
            tar_col = col_Teal
            dis_col = col_orange
        else:
            tar_col = col_orange
            dis_col = col_Teal

        if target_orientation == 0:
            corr_ans = 'f'
        else:
            corr_ans = 'j'

        items = [None]*6

        for i in range(6):
            # pos1, pos2, pos3, pos4, pos5, pos6 are the six positions of the six shapes, let pos = pos$i
            position = locals()[f'pos{i+1}']
            shape = locals()[f'shape{i+1}']

            if shape == 0:
                items[i]= visual.Circle(win=win,radius= dw/2,edges = 128, lineWidth=lw)
            else:
                items[i]= visual.Polygon(win = win, edges = 4, size = dw,lineWidth = lw)
                items[i].edges = shape
            if singleton == 1 and i == 1: # distractor singleton
                items[i].fillColor = dis_col
            else:
                items[i].fillColor = tar_col

            items[i].name=f'pos{i+1}'
            items[i].setPos((CoordsX[position], CoordsY[position]))
            items[i].setAutoDraw(True)

        # Draw lines inside the shapes
        lines = [None]*6
        for i in range(6):
            lines[i]=visual.Rect(win=win,size = [dw/3.0,0.1], lineWidth=lw, fillColor = 'black', lineColor = 'black')
            lines[i].setPos((CoordsX[i], CoordsY[i]))
            if i==pos1:
                if target_orientation == 0:
                    lines[i].ori = 0
                else:
                    lines[i].ori = 90
            elif i==pos2 and cue_validity == 1: # distractor
                if target_orientation == 0:
                    lines[i].ori = 90
                else:
                    lines[i].ori = 0
            else:
                # random 0 or 90
                lines[i].ori = randchoice([0, 90])
            lines[i].setAutoDraw(True)
      End Routine:
        for i in range(6):
            items[i].setAutoDraw(False)
            lines[i].setAutoDraw(False)
        win.flip()

        if search_response.corr == 1:
            corr_trials = corr_trials +1
    KeyboardComponent search_response
      allowedKeys = 'f','j'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine block_break
    CodeComponent break_code
      Code Type = Py
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      Begin Experiment:
        corr_trials = 0
        block_break = False
        key_dur = 1.0 + random()/2.0
      Begin Routine:
        if ((trials.thisN+1) % block_trials == 0):
            block_break = True
            key_dur = 1000.0
            this_block=int((trials.thisN+1)/block_trials)
            corr_rate = round(corr_trials/block_trials*100)
            btext = 'Block No. ' + str(this_block) + ' was finished.\n\n'
            btext = btext + 'In the previous block, your correct rate was: \n\n' + str(corr_rate) + '%\n\n'
            btext = btext + 'Please keep your correct rate as high as possible. \n'
            btext = btext + 'If you are ready, press the SPACEBAR to continue ...'
            block_info.text = btext
            corr_trials=0
        else:
            block_info.text = ''
      End Routine:
        block_break = False
        key_dur = 1.0 + random()/2.0
    TextComponent block_info
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $key_dur
      text = Take a rest
      wrapWidth = 40
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $key_dur
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  Routine finish
    TextComponent end
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text:
        The experiment is finished.

        Thank you for your participation!
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruction3
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent diamond1
      fillColor = -0.7255,0.8902,0.8353
      lineColor = -0.7255,0.8902,0.8353
      ori = 45
      pos = (-4, 0)
      saveStartStop = False
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    PolygonComponent diamond2
      fillColor = 1.000, 0.2491, -1.0000
      lineColor = 1.000, 0.2491, -1.0000
      ori = 45
      pos = (4, 0)
      saveStartStop = False
      shape = rectangle
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextComponent Task
      letterHeight = 1
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        Your task is to identify the orientation of the line inside the diamond and make a response by pressing 'f' for horizontal and 'j' for vertical. Please ignore any colour distractor that may appear on the screen.

        Press a SPACE key to start.
    PolygonComponent line1
      fillColor = black
      lineColor = black
      pos = (-4.0, 0)
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.1)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent line2
      fillColor = black
      lineColor = black
      ori = 90
      pos = (4, 0)
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.1)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent key_f
      letterHeight = 2
      pos = (-4, -4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = f
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    TextComponent key_j
      letterHeight = 2
      pos = (4, -4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = j
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  Routine Instruction2
    ImageComponent image_instr1
      image = display.png
      saveStartStop = False
      size = (10, 7.7)
      startVal [time (s)] = 0.0
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    TextComponent text_intro
      letterHeight = 1
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        Immediately following the cue display, you will see a visual search display comprising six items. In some trials, one may be a pop-out colour, a distractor you should ignore.

        Your task is to find the diamond item and discriminate the orientation of the line inside it.
    KeyboardComponent space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_cont2
      letterHeight = 1
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue ...
      units = deg
      wrapWidth = 40
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  Routine Instruction1
    ImageComponent image_inst_
      image = cue_display.png
      pos = (-0.3, 0)
      saveStartStop = False
      size = [10, 7.13]
      startVal [time (s)] = 0.0
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    TextComponent text_1
      letterHeight = 1
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 40
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      text:
        In this search experiment, you will see a cue and search display. The cue display consists of a fixation cross and a line pointing in one direction, which you should ignore. Below is an example of a cue display.
    KeyboardComponent space0
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_cont
      letterHeight = 1
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACEBAR to continue ...
      units = deg
      wrapWidth = 40
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Flow
  Routine Instruction1
  Routine Instruction2
  Routine instruction3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"data/seq_"+expInfo['participant']+".csv"
    loopType = sequential
    nReps = 1
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    Routine cue
    Routine search
    Routine block_break
  LoopTerminator trials
  Routine finish
